CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:11
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):s7_ch-zunique-primary_
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Primary
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    Rescale intensities?:Yes

LoadImages:[module_num:2|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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):s7_ch-mgfp_
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Secondary
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    Rescale intensities?:Yes

EnhanceEdges:[module_num:3|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
    Select the input image:Secondary
    Name the output image:EdgedImage
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    Select an edge-finding method:LoG
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    Calculate Gaussian's sigma automatically?:Yes
    Gaussian's sigma value:10.0
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
ImageMath:[module_num:4|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertEdge
    Image or measurement?:Image
    Select the first image:EdgedImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:Secondary
    Name the output image:EnhenceCircl
    Select the operation:Enhance
    Feature size:2
    Feature type:Circles
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
ImageMath:[module_num:6|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:EnhenceCircl
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EdgedImage
    Multiply the second image by:5
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Primary
    Name the primary objects to be identified:Markers
    Typical diameter of objects, in pixel units (Min,Max):3,13
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Markers
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:ImageAfterMath
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Entropy
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Cells
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::20_11_15_s7_UNIQUE00_
    Overwrite without warning?:Yes
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
SaveImages:[module_num:11|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
    Select the type of image to save:Objects
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    Select the objects to save:Cells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Secondary
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cp-zunique-mgfp-UNIQUE00
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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