CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:or (file does contain "ch00")
    Name to assign these images:NuclearStain
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:cytoskeleton
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:gfp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:gfp
    Name the output image:gfp_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
ApplyThreshold:[module_num:6|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
    Select the input image:gfp_smooth
    Name the output image:gfp_threshold
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ImageMath:[module_num:7|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:NucleaAfterMath
    Image or measurement?:Image
    Select the first image:NuclearStain
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:gfp_threshold
    Multiply the second image by:1
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:NucleaAfterMath
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:MB
    Select the method to identify the secondary objects:Propagation
    Select the input image:gfp_smooth
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    Regularization factor:0.05
    Name the outline image:MBOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Method to calculate adaptive window size:Image size
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:MB
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:gfp
    Name the output image:gfpMaskedOutlines
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:MBOutlines
    Select outline color:Red
    Load outlines from an image or objects?:Image
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:gfpMaskedOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:gfp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_labels
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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